PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'time': 'a'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = -1.0000, -1.0000, -1.0000
  expName = emoreg-stim-rater
  keyboardBackend = ioHub
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Routines
  Routine trial
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    ImageComponent stim
      image [set every repeat] = $stim_path
      pos = (0, 0.1)
      size = (0.7, None)
      startVal [time (s)] = 0.0
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    SliderComponent rating_scale
      fillColor = 1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 1
      initVal = 3
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.1, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,1,2,3,4,5,6)
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    ButtonComponent next_button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.75, 0.42)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = next
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    TextboxComponent left_anchor
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (-0.75, -0.3)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'least ' + Valence[:3]
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    TextboxComponent right_anchor
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0.75, -0.3)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'most ' + Valence[:3]
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  Routine pause
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    TextboxComponent pause_box
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = $slice(0,44) if expInfo['time']=='a' else slice(44,88)
    conditionsFile = trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('stim_path', './stims/pln_14_b.jpg'), ('face_path', './faces/22.jpg'), ('Valence', 'positive'), ('ITI', 9000), ('ISI', 2117), ('TrialLen', 15617), ('TrialLenSec', 15.617), ('TrialLenSum', 15.617), ('face_gender', 'f')]),
      OrderedDict([('stim_path', './stims/suf_08_h.jpg'), ('face_path', './faces/45.jpg'), ('Valence', 'negative'), ('ITI', 9000), ('ISI', 2283), ('TrialLen', 15783), ('TrialLenSec', 15.783), ('TrialLenSum', 31.4), ('face_gender', 'm')]),
      OrderedDict([('stim_path', './stims/pln_06_f.jpg'), ('face_path', './faces/36.jpg'), ('Valence', 'positive'), ('ITI', 9000), ('ISI', 2050), ('TrialLen', 15550), ('TrialLenSec', 15.55), ('TrialLenSum', 46.95), ('face_gender', 'm')]),
      OrderedDict([('stim_path', './stims/hrm_14_i.jpg'), ('face_path', './faces/33.jpg'), ('Valence', 'negative'), ('ITI', 9000), ('ISI', 2500), ('TrialLen', 16000), ('TrialLenSec', 16.0), ('TrialLenSum', 62.95), ('face_gender', 'm')]),
      OrderedDict([('stim_path', './stims/suf_05_g.jpg'), ('face_path', './faces/4.jpg'), ('Valence', 'negative'), ('ITI', 9000), ('ISI', 2067), ('TrialLen', 15567), ('TrialLenSec', 15.567), ('TrialLenSum', 78.517), ('face_gender', 'f')]),
      OrderedDict([('stim_path', './stims/suf_07_d.jpg'), ('face_path', './faces/32.jpg'), ('Valence', 'negative'), ('ITI', 9000), ('ISI', 2983), ('TrialLen', 16483), ('TrialLenSec', 16.483), ('TrialLenSum', 95.0), ('face_gender', 'm')])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
    Routine trial
    Routine pause
  LoopTerminator trials
